---
API: 2.1
OpenSesame: 3.3.6
Platform: nt
---
set width 1920
set uniform_coordinates yes
set title "Multiple Choice Mental Rotation"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 24
set font_italic no
set font_family sans
set font_bold no
set experiment_path "C:\\Users\\LocalAdmin\\Documents\\Programmierung\\Leo\\MCMR\\OpenSesame\\javascript version"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#000000"

define sketchpad BlankAtBlockEnd
	set duration "[fixationDuration]"
	set description "Präsentiert Stimuli"

define loop Blocks
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 7
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 aaBlock practice
	setcycle 0 block 0
	setcycle 0 feedback 1
	setcycle 0 fixationDuration 500
	setcycle 0 helpMessageActive 1
	setcycle 0 instructions practice
	setcycle 0 maxDurationMins 15
	setcycle 1 aaBlock main1
	setcycle 1 block 0
	setcycle 1 feedback 0
	setcycle 1 fixationDuration 500
	setcycle 1 helpMessageActive 0
	setcycle 1 instructions main
	setcycle 1 maxDurationMins 3
	setcycle 2 aaBlock main2
	setcycle 2 block 1
	setcycle 2 feedback 0
	setcycle 2 fixationDuration 500
	setcycle 2 helpMessageActive 0
	setcycle 2 instructions main
	setcycle 2 maxDurationMins 3
	setcycle 3 aaBlock main3
	setcycle 3 block 2
	setcycle 3 feedback 0
	setcycle 3 fixationDuration 500
	setcycle 3 helpMessageActive 0
	setcycle 3 instructions main
	setcycle 3 maxDurationMins 3
	setcycle 4 aaBlock main4
	setcycle 4 block 3
	setcycle 4 feedback 0
	setcycle 4 fixationDuration 500
	setcycle 4 helpMessageActive 0
	setcycle 4 instructions main
	setcycle 4 maxDurationMins 3
	setcycle 5 aaBlock main5
	setcycle 5 block 4
	setcycle 5 feedback 0
	setcycle 5 fixationDuration 500
	setcycle 5 helpMessageActive 0
	setcycle 5 instructions main
	setcycle 5 maxDurationMins 3
	setcycle 6 aaBlock main6
	setcycle 6 block 5
	setcycle 6 feedback 0
	setcycle 6 fixationDuration 500
	setcycle 6 helpMessageActive 0
	setcycle 6 instructions main
	setcycle 6 maxDurationMins 3
	run new_sequence

define sequence Consent
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run readConsent always
	run QuestionsLoop_1 always

define inline_javascript Finish
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run "//console.log('finish')"
	set _prepare ""

define sketchpad Fixation
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Aufgabe: [itemNumber]/[maxNumberStimuli]" x="[x0]" y="-[yButton]" z_index=1
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes name=timeField show_if=always text="verbleibende Zeit: [timeLeft]" x="[x4]" y="-[yButton]" z_index=1
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes name=helpField show_if=always text="[helpText]" x=0 y="-[yButton]" z_index=1

define inline_javascript GetClicked
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//ignore input and finish task if time of block is up
	if(new Date().getTime()-vars.startTimeOfBlock>vars.maxDuration){
	    vars.nextButton=1
	} else {
	    //calculate position of mouse and clicked items
	    var imageTop=0
	    var imageBottom=0
	    //check y coordinates for items and buttons
	    if (Math.abs(vars.cursor_y+vars.yOffset)<vars.distance/2){
	        //within image distance of yOffset
	        imageTop=1
	    } else if (Math.abs(vars.cursor_y-vars.yOffset)<vars.distance/2) {
	        imageBottom=1
	    } else if (Math.abs(vars.cursor_y-vars.yButton)<vars.buttonHeight/2) {
	        //x and y coordinates on button?
	        vars.nextButton=Math.abs(vars.cursor_x-vars.x4)<vars.buttonWidth/2 ? 1:0
	    }
	    //x coordinates (images are separated by vars.distance)
	    var imageNumber=Math.floor((vars.cursor_x-vars.x0-vars.xDiffAdd+vars.distance/2)/vars.distance)
	    //mark items (if cursor is over items) (if imageTop is 1, imageBottom is 0)
	    if(imageTop+imageBottom>0){
	        //only if selected items are visible
	        if(imageNumber+imageBottom*4<=vars.nStimuli){
	            switch (imageNumber+imageBottom*4){
	                case 1:
	                    vars.show0=1-vars.show0
	                    vars.show0r=vars.show0*vars.feedback
	                    vars.show0g=vars.show0*vars.feedback*vars.correct0
	                    break;
	                case 2:
	                    vars.show1=1-vars.show1
	                    vars.show1r=vars.show1*vars.feedback
	                    vars.show1g=vars.show1*vars.feedback*vars.correct1
	                    break;
	                case 3:
	                    vars.show2=1-vars.show2
	                    vars.show2r=vars.show2*vars.feedback
	                    vars.show2g=vars.show2*vars.feedback*vars.correct2
	                    break;
	                case 4:
	                    vars.show3=1-vars.show3
	                    vars.show3r=vars.show3*vars.feedback
	                    vars.show3g=vars.show3*vars.feedback*vars.correct3
	                    break; 
	                case 5:
	                    vars.show4=1-vars.show4
	                    vars.show4r=vars.show4*vars.feedback
	                    vars.show4g=vars.show4*vars.feedback*vars.correct4
	                    break;   
	                case 6:
	                    vars.show5=1-vars.show5
	                    vars.show5r=vars.show5*vars.feedback
	                    vars.show5g=vars.show5*vars.feedback*vars.correct5
	                    break;   
	                case 7:
	                    vars.show6=1-vars.show6
	                    vars.show6r=vars.show6*vars.feedback
	                    vars.show6g=vars.show6*vars.feedback*vars.correct6
	                    break;   
	                case 8:
	                    vars.show7=1-vars.show7
	                    vars.show7r=vars.show7*vars.feedback
	                    vars.show7g=vars.show7*vars.feedback*vars.correct7
	                    break;   
	            }
	        }
	    }
	    //check if half of items are selected 
	    if (vars.show0+vars.show1+vars.show2+vars.show3+ vars.show4+vars.show5+vars.show6+vars.show7==vars.nStimuli/2){
	    	vars.nextButtonText=vars.continueMessage
	    } else {
	    	vars.nextButtonText=vars.errorMessage
	    	vars.nextButton=0
	    }
	}
	__end__
	set _prepare ""

define inline_javascript GetClickedQuestion
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//check if y is at height of buttons
	if (Math.abs(vars.cursor_y-vars.yButtonQuestionnaire)<vars.buttonHeightQuestionnaire/2) {
	    //check possible anwers
	    vars.answerNumber=Math.floor((vars.cursor_x-vars.xButton1BGQuestionnaire)/(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire))
	    //check if black part between buttons clicked
	    if(vars.cursor_x-vars.xButton1BGQuestionnaire-vars.answerNumber*(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)>vars.buttonWidthQuestionnaire){
	        vars.answerNumber=0
	    } else {
	        vars.answerNumber+=1
	        if (vars.answerNumber>vars.nAnswers){
	            vars.answerNumber=0
	        } else {
	            switch (vars.answerNumber){
	                case 1:
	                    vars.answer=vars.answer1
	                    break
	                case 2:
	                    vars.answer=vars.answer2
	                    break
	                case 3:
	                    vars.answer=vars.answer3
	                    break
	                case 4:
	                    vars.answer=vars.answer4
	                    break
	                case 5:
	                    vars.answer=vars.answer5
	                    break
	            }
	            
	        }
	    }
	}
	if(vars.questionID=='jumpToQuestion'){
	    switch(vars.answer){
	        case 'Zurück':
	            vars.questionNumber=1
	            break;
	        case 'Teilnahmebedingung<br>Gewinnspiel':
	            vars.questionNumber=2
	            break;
	        case 'Information<br>Versuchspersonen-<br>stunden':
	            vars.questionNumber=3
	            break;
	        case 'Aufklärungsdokument':
	            vars.questionNumber=4
	            break;
	        case 'Datenschutzerklärung':
	            vars.questionNumber=5
	            break;
	        case 'Weiter':
	            vars.questionNumber=6
	            break;
	    }
	}
	__end__
	set _prepare ""

define inline_javascript GetClicked_1
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//check if y is at height of buttons
	if (Math.abs(vars.cursor_y-vars.yButtonQuestionnaire)<vars.buttonHeightQuestionnaire/2) {
	    //check possible anwers
	    vars.answerNumber=Math.floor((vars.cursor_x-vars.xButton1BGQuestionnaire)/(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire))
	    console.log(vars.answerNumber)
	    //check if black part between buttons clicked
	    if(vars.cursor_x-vars.xButton1BGQuestionnaire-vars.answerNumber*(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)>vars.buttonWidthQuestionnaire){
	        vars.answerNumber=0
	    } else {
	        vars.answerNumber+=1
	        if (vars.answerNumber>vars.nAnswers){
	            vars.answerNumber=0
	        } else {
	            switch (vars.answerNumber){
	                case 1:
	                    vars.answer=vars.answer1
	                    break
	                case 2:
	                    vars.answer=vars.answer2
	                    break
	                case 3:
	                    vars.answer=vars.answer3
	                    break
	                case 4:
	                    vars.answer=vars.answer4
	                    break
	            }
	            
	        }
	    }
	}
	__end__
	set _prepare ""

define notepad License
	__note__
	### Multiple Choice Mental Rotation experiment
	#     Copyright (C) 2021  Leonardo Jost
	# 
	# This program is free software: you can redistribute it and/or modify
	# it under the terms of the GNU General Public License as published by
	# the Free Software Foundation, either version 3 of the License, or
	# (at your option) any later version.
	# 
	# This program is distributed in the hope that it will be useful,
	# but WITHOUT ANY WARRANTY; without even the implied warranty of
	# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
	# GNU General Public License for more details.
	# 
	# You should have received a copy of the GNU General Public License
	# along with this program.  If not, see <https://www.gnu.org/licenses/>.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sequence Questionnaire
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run readQuestions always
	run QuestionsLoop always

define loop QuestionsLoop
	set source table
	set repeat 100
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[questionNumber]>=[numberOfQuestions]"
	setcycle 0 empty_column ""
	run QuestionsLoopSequence

define sequence QuestionsLoopSequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run prepareQuestion always
	run showQuestion always
	run questionnaireLogger always

define sequence QuestionsLoopSequence_1
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run prepareConsent always
	run showQuestion always

define loop QuestionsLoop_1
	set source table
	set repeat 100
	set order random
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[questionNumber]>=[numberOfQuestions]"
	setcycle 0 empty_column ""
	run QuestionsLoopSequence_1

define inline_javascript RandomizeAlternatives
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//shufle array a
	function shuffle(a) {
	    for (let i = a.length - 1; i > 0; i--) {
	        const j = Math.floor(Math.random() * (i + 1));
	        [a[i], a[j]] = [a[j], a[i]]
	    }
	    return a
	}
	//get random element of array a
	function randomChoice(a){
	    return a[Math.floor(Math.random() * a.length)]
	}
	//load randomized parameters for stimulus
	vars.model=vars.stimulusList[vars.itemNumber][0]
	vars.angle=vars.stimulusList[vars.itemNumber][1]
	vars.nStimuli=Math.abs(vars.stimulusList[vars.itemNumber][2])
	vars.orientation=randomChoice(vars.orientations)
	
	//set optical parameters depending on number of stimuli
	if (vars.nStimuli<5){
	    vars.yOffset=0
	}else{
	    vars.yOffset=vars.distance/2
	}
	vars.yBorderTop=vars.yB-vars.yOffset
	vars.yBorderBottom=vars.yB+vars.yOffset 
	//choose random alternatives
	//random angles
	if(vars.uprightAngles.includes(vars.angle)){
	    //random orientation
	    vars.orientationsArray = new Array(vars.nStimuli/vars.orientations.length).fill(vars.orientations).flat()
	    shuffle(vars.orientationsArray)
	    //fill orientationsArray to 8 for unused alternatives
	    vars.orientationsArray=new Array(8/vars.nStimuli).fill(vars.orientationsArray).flat()
	    //get random angles such that the same combination of angles and orientation is not repeated
		var anglesArray1=vars.angles.slice()
	    //do not use angle of stimulus
		anglesArray1.splice(anglesArray1.indexOf(vars.angle),1)
		shuffle(anglesArray1)
		var anglesArray2=anglesArray1.slice()
		shuffle(anglesArray2)
		vars.anglesArray=[]
		var j=0
		for (var i=0;i<8;i++){
			if (vars.orientationsArray[i]==vars.orientation){
				vars.anglesArray.push(anglesArray1[j])
				j+=1
			}else{
				vars.anglesArray.push(anglesArray2[i-j])
	        }
	    }
	} else {
	    //always show in pairwise switching order
		//set pairwise mirrored angles
		var orientationsCopy=vars.orientations.slice()
		var anglesArray1=[0,0,90,90,180,180,270,270]
		vars.orientationsArray=[]
		vars.anglesArray=[]
		var anglesOrder=[0,1,2,3]
		shuffle(anglesOrder)
		for (var i=0;i<4;i++){
			shuffle(orientationsCopy)
			vars.orientationsArray=vars.orientationsArray.concat(orientationsCopy)
			vars.anglesArray.push(anglesArray1[2*anglesOrder[i]],anglesArray1[2*anglesOrder[i]+1])
	    }
		//switch rotation direction for one orientation such that they appear mirrored
		for (var i=0;i<vars.orientationsArray.length;i++){
			if (vars.orientationsArray[i]==vars.orientation){
				vars.anglesArray[i]=(360-vars.anglesArray[i])%360 
	        }
	    }
	}
	__end__

define sketchpad ShowInstructions
	set duration 0
	set description "Präsentiert Stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size="[instructionFontSize]" html=yes show_if=always text="[instructionText]" x=0 y=0 z_index=0

define inline_javascript blockParams
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//get nicer looking string to display time as mm:ss
	function getNiceTime(timeSeconds){
	    var timeMins=Math.floor(timeSeconds/60)
	    var timeSeconds=Math.floor(timeSeconds-60*timeMins)
	    var mins=timeMins<10 ? '0' : ''
	    var secs=timeSeconds<10 ? '0' : ''
	    return mins+timeMins+':'+secs+timeSeconds
	}
	//set first index
	vars.itemNumber=0
	vars.maxNumberStimuli=vars.stimulusList.length
	//time left until end
	vars.maxDuration=vars.maxDurationMins*60*1000
	vars.timeLeft=getNiceTime(vars.maxDuration/1000)
	vars.endTimeOfTask=0
	vars.endTimeOfTaskRelative=0
	vars.fixationDurationLeft=1
	//initialize answers array
	vars.answers=[0]
	//help message
	vars.helpText=vars.helpMessageActive==1? vars.helpMessage : ''
	__end__
	set _prepare ""

define inline_javascript createID
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.aaID='7134-' + vars.subject_nr.toLocaleString(undefined, {minimumIntegerDigits: 4, useGrouping:false})+'-' + Math.floor(Math.random()*10000).toLocaleString(undefined, {minimumIntegerDigits: 4, useGrouping:false})
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run License always
	run createID always
	run globalParameters always
	run initializeRandomizationParameters always
	run Consent always
	run Blocks always
	run Questionnaire always
	run Finish always

define inline_javascript getResults
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//parameters for logging
	//stimuli which should have been selected
	vars.correctStimuli=[vars.correct0,vars.correct1,vars.correct2,vars.correct3, vars.correct4,vars.correct5,vars.correct6,vars.correct7].slice(0,vars.nStimuli)
	//selected stimuli
	vars.answers=[vars.show0,vars.show1,vars.show2,vars.show3,vars.show4,vars.show5,vars.show6,vars.show7].slice(0,vars.nStimuli)
	//correctness of selection
	vars.correctAnswers=vars.answers.map((e, i)=> e == vars.correctStimuli[i]? 1:0)
	vars.sumCorrect=vars.correctAnswers.reduce((pv,cv)=>pv+cv)
	//shorten anglesArray to actually used angles
	vars.anglesArray=vars.anglesArray.slice(0,vars.nStimuli)
	__end__
	set _prepare ""

define inline_javascript getTaskEndTime
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.endTimeOfTask = new Date().getTime()
	vars.reactionTime = vars.endTimeOfTask - vars.startTimeOfTask
	vars.endTimeOfTaskRelative=vars.endTimeOfTask-vars.startTimeOfBlock
	__end__
	set _prepare ""

define inline_javascript globalParameters
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	////// parameters
	////instructions
	//minimum duration of instructions in ms
	vars.instructionDuration=1000
	vars.instructionFontSize=24
	vars.instructionsPractice='<b>Mentale Rotation</b><br><br>Im folgenden Test sollen Sie mentale Rotationsaufgaben lösen.<br>Hierzu sehen Sie bei jeder Aufgabe auf der linken Seite ein Objekt und rechts davon entweder zwei, vier oder acht Vergleichtsobjekte.<br>Es sind immer genau die Hälfte der Vergleichsobjekte richtig, d.h. sie lassen sich durch eine Drehung im Kopf in das Objekt auf der linken Seite überführen.<br>Die andere Hälfte der Vergleichsobjekte ist gespiegelt.<br><br>Bitte klicken Sie die richtigen Objekte an, die sich durch eine Drehung in das Objekt auf der linken Seite überführen lassen.<br>Ihre Auswahl wird durch Umrandungen markiert. Sie können Ihre Auswahl auch nochmal verändern. <br>Sie müssen genau die Hälfte der Objekte markieren. Versuchen Sie dabei, alle richtigen Objekte zu markieren.<br><br>Im Folgenden sehen Sie drei Beispielaufgaben. Sie bekommen dazu noch Feedback, ob Ihre Antworten richtig oder falsch waren.<br>Dies wird durch eine grüne (richtig) oder rote (falsch) Umrandung der Figuren angezeigt.<br><br>Sie haben nun Zeit, um die Aufgaben und die Bedienung kennenzulernen.<br><br>Drücken Sie die linke Maustaste um das Experiment zu starten.'
	vars.instructionsMain=[
	    '<b>Ende der Übungseinheit</b><br><br>Die Übungseinheit ist nun zu Ende.<br>Ihnen werden nun in 6 Blöcken mentale Rotationsaufgaben gezeigt.<br><br>Pro Block haben Sie 3 Minuten Zeit.<br><br>Im ersten Block kommen _nTasks_ Aufgaben mit jeweils _nStim_ Antwortmöglichkeiten.<br><br>Versuchen Sie, in jeder Aufgabe alle richtigen Figuren zu identifizieren.<br>Sie bekommen einen Punkt, wenn Sie in einer Aufgabe alle richtigen Figuren auswählen.<br>Wenn Sie eine falsche Lösung auswählen erhalten Sie keinen Punkt.<br><br>Sie erhalten kein Feedback mehr, Ihre ausgewählten Figuren werden weiß umrandet.<br><br>Drücken Sie die linke Maustaste, um fortzufahren,<br>wenn Sie sich bereit fühlen.',
	    '<b>Pause</b><br><br>Der erste Block ist nun zu Ende.<br>Sie haben nun eine kurze Pause, danach folgt der zweite Block.<br><br>Für diesen haben Sie wieder insgesamt 3 Minuten Zeit.<br><br>In diesem Block kommen _nTasks_ Aufgaben mit jeweils _nStim_ Antwortmöglichkeiten.<br><br>Versuchen Sie, in jeder Aufgabe alle richtigen Figuren zu identifizieren.<br>Sie bekommen einen Punkt, wenn Sie in einer Aufgabe alle richtigen Figuren auswählen.<br>Wenn Sie eine falsche Lösung auswählen erhalten Sie keinen Punkt.<br><br>Nehmen Sie sich für die Pause so viel Zeit, wie Sie möchten.<br><br>Drücken Sie die linke Maustaste, um fortzufahren,<br>wenn Sie sich bereit fühlen.',
	    '<b>Pause</b><br><br>Der zweite Block ist nun zu Ende.<br>Sie haben nun eine kurze Pause, danach folgt der dritte Block.<br><br>Für diesen haben Sie wieder insgesamt 3 Minuten Zeit.<br><br>In diesem Block kommen _nTasks_ Aufgaben mit jeweils _nStim_ Antwortmöglichkeiten.<br><br>Versuchen Sie, in jeder Aufgabe alle richtigen Figuren zu identifizieren.<br>Sie bekommen einen Punkt, wenn Sie in einer Aufgabe alle richtigen Figuren auswählen.<br>Wenn Sie eine falsche Lösung auswählen erhalten Sie keinen Punkt.<br><br>Nehmen Sie sich für die Pause so viel Zeit, wie Sie möchten.<br><br>Drücken Sie die linke Maustaste, um fortzufahren,<br>wenn Sie sich bereit fühlen.',
	    '<b>Pause</b><br><br>Der dritte Block ist nun zu Ende.<br>Sie haben nun eine kurze Pause, danach folgt der vierte Block.<br><br>Für diesen haben Sie wieder insgesamt 3 Minuten Zeit.<br><br>In diesem Block kommen _nTasks_ Aufgaben mit jeweils _nStim_ Antwortmöglichkeiten.<br><br>Versuchen Sie, in jeder Aufgabe alle richtigen Figuren zu identifizieren.<br>Sie bekommen einen Punkt, wenn Sie in einer Aufgabe alle richtigen Figuren auswählen.<br>Wenn Sie eine falsche Lösung auswählen erhalten Sie keinen Punkt.<br><br>Nehmen Sie sich für die Pause so viel Zeit, wie Sie möchten.<br><br>Drücken Sie die linke Maustaste, um fortzufahren,<br>wenn Sie sich bereit fühlen.',
	    '<b>Pause</b><br><br>Der vierte Block ist nun zu Ende.<br>Sie haben nun eine kurze Pause, danach folgt der fünfte Block.<br><br>Für diesen haben Sie wieder insgesamt 3 Minuten Zeit.<br><br>In diesem Block kommen _nTasks_ Aufgaben mit jeweils _nStim_ Antwortmöglichkeiten.<br><br>Versuchen Sie, in jeder Aufgabe alle richtigen Figuren zu identifizieren.<br>Sie bekommen einen Punkt, wenn Sie in einer Aufgabe alle richtigen Figuren auswählen.<br>Wenn Sie eine falsche Lösung auswählen erhalten Sie keinen Punkt.<br><br>Nehmen Sie sich für die Pause so viel Zeit, wie Sie möchten.<br><br>Drücken Sie die linke Maustaste, um fortzufahren,<br>wenn Sie sich bereit fühlen.',
	    '<b>Pause</b><br><br>Der fünfte Block ist nun zu Ende.<br>Sie haben nun eine kurze Pause, danach folgt der sechste Block.<br><br>Für diesen haben Sie wieder insgesamt 3 Minuten Zeit.<br><br>In diesem Block kommen _nTasks_ Aufgaben mit jeweils _nStim_ Antwortmöglichkeiten.<br><br>Versuchen Sie, in jeder Aufgabe alle richtigen Figuren zu identifizieren.<br>Sie bekommen einen Punkt, wenn Sie in einer Aufgabe alle richtigen Figuren auswählen.<br>Wenn Sie eine falsche Lösung auswählen erhalten Sie keinen Punkt.<br><br>Nehmen Sie sich für die Pause so viel Zeit, wie Sie möchten.<br><br>Drücken Sie die linke Maustaste, um fortzufahren,<br>wenn Sie sich bereit fühlen.'
	]
	////questionnaire: 
	//both consent and questions are presented in the form (at most 5 answers are supported for now because they have to be hardcoded)
	//[['answer1','answer2',...,'answer5'],name/ID of question (for logger),'text']
	//questionID='jumpToQuestion' allows jumping between questions (hardcoded in GetClickedQuestion)
	//consent
	vars.consentArray=[
	    [['Weiter'],'start',
	    '<span style="color:rgba(0,0,0,.01)">.</span><br><br><br><b>Vorabinformation</b><br><br>Vielen Dank für Ihre Bereitschaft zur Teilnahme an dem Experiment!<br><br>Hier sind noch einige Vorabinformationen zur Durchführung:<br>Bitte bearbeiten Sie das Experiment an einem PC oder Laptop.<br>Maximieren Sie Ihr Browserfenster und drücken Sie F11 um den Vollbildmodus Ihres Browsers zu aktivieren (unter MacOS Strg+⌘+F).<br>(Sie können den Vollbildmodus wieder deaktivieren, wenn Sie nochmal F11 bzw. Strg+⌘+F drücken)<br>Nehmen Sie sich ca. 30 Minuten Zeit und sorgen Sie für eine möglichst ungestörte Atmosphäre.<br>Lesen Sie die Instruktionen aufmerksam und sorgfältig.<br>Bitte bearbeiten Sie das Experiment alleine.<br><br>Wenn Sie jetzt keine Zeit haben oder das Experiment nicht bearbeiten möchten, können Sie gerne auch ein andermal teilnehmen.<br><br>Falls Fragen oder Probleme auftreten können Sie sich gerne per E-Mail an leonardo.jost@ur.de wenden.'],
	    [['Teilnahmebedingung<br>Gewinnspiel',
	    'Information<br>Versuchspersonen-<br>stunden',
	    'Aufklärungsdokument',
	    'Datenschutzerklärung',
	    'Weiter'],'jumpToQuestion',
	    '<b>Informationen zum Experiment</b><br><br>Hier finden Sie alle Informationen zum Experiment und zur Datenverarbeitung.<br><br>Neben dem Experiment besteht (optional) die Möglichkeit, entweder an einer Gutscheinverlosung (Gewinnspiel) von insgesamt vier Gutscheinen über<br>jeweils 25€ teilzunehmen<br>oder<br>eine halbe Versuchspersonenstunde des Instituts für Sportwissenschaft der Universität Regensburg zu erhalten.<br><br>Alle Informationen bekommen Sie auch über die Website<br>https://www.uni-regensburg.de/psychologie-paedagogik-sport/sportwissenschaft/forschung/experimente/index.html<br><br>Einen Link zu der Website sollten Sie auch mit der Einladung zum Experiment erhalten haben.<br><br>Klicken Sie auf Weiter, wenn Sie alle Informationen gelesen und verstanden haben.'],
	    [['Zurück'],'jumpToQuestion','<b>Teilnahmebedingung für das Gewinnspiel</b><br><br>Veranstalter der Verlosung ist das Institut für Sportwissenschaft der Universität Regensburg, Universitätsstraße 31, 93053 Regensburg.<br>Für Rückfragen steht der Verantwortliche unter sekretariat.jansen@ur.de zur Verfügung.<br><br>Teilnehmen können einmalig alle ab 18 Jahren, die das Onlineexperiment abschließen.<br>Ausgeschlossen sind am o. g. Institut für Sportwissenschaft Tätige.<br>Eine Teilnahme ist nur möglich, indem der im Rahmen des Onlineexperiments erhaltene Code innerhalb von 7 Tagen nach Ende des Experiments<br>in einer E-Mail mit dem Betreff „Gewinnspiel mentale Rotation“ an sekretariat.jansen@ur.de gesendet wird.<br><br>Bei berechtigten Gründen (z. B. mehrmalige Teilnahme, Täuschung, Zuwiderhandlung gegen die Teilnahmebedingungen) darf der Veranstalter<br>Personen von der Verlosung ausschließen.<br><br>Die Ermittlung der Gewinner*innen erfolgt per Los, nachdem die erforderliche Mindestanzahl an Teilnehmer*innen für das Experiment erreicht<br>wurde, spätestens jedoch zum 30.06.2021. Gewinner*innen werden per E-Mail über ihren Gewinn informiert. Es entstehen Gewinner*innen keine<br>Kosten durch die Teilnahme oder um ihren Gewinn zu erhalten. Wenn eine Gewinner*in nicht innerhalb von 30 Tagen auf die<br>Gewinnbenachrichtigung per E-Mail antwortet, wird der entsprechende Gewinn erneut verlost.<br><br>Verlost werden vier 25 Euro-Gutscheine, einer pro Gewinner*in. Gewinner*innen dürfen sich den Anbieter der Gutscheine aussuchen, solange<br>es sich um digitale Gutscheine handelt. Im Einzelfall behält sich der Veranstalter vor, Gutscheinwünsche von Gewinner*innen abzulehnen,<br>insbesondere wenn der fragliche Shop Artikel anbietet, die mit der Verfassung des Freistaates Bayern oder dem Grundgesetz unvereinbar sind.<br>In diesem Fall dürfen Gewinner*innen einen anderen Anbieter vorschlagen. Nach erfolgreicher Übermittlung der Gutscheine werden alle<br>E-Mail-Adressen der Teilnehmer gelöscht.<br><br>Mit der Teilnahme an diesem Gewinnspiel erkennen Teilnehmende die Teilnahmebedingungen an. Der Rechtsweg ist ausgeschlossen.'],
	    [['Zurück'],'jumpToQuestion','<b>Information zu Versuchspersonenstunden</b><br><br>Für die Teilnahme am Experiment können Sie eine halbe (0,5) Versuchspersonenstunde des Instituts für Sportwissenschaft der Universität<br>Regensburg erhalten, indem der im Rahmen des Onlineexperiments erhaltene Code in einer E-Mail an sekretariat.jansen@ur.de gesendet wird.<br>In der E-Mail müssen außerdem folgende Informationen enthalten sein: <br>Eine Kopie Ihres Laufzettels für Versuchspersonenstunden und<br>der Name des Experiments („Unterschiedliche Arten von mentalen Rotationsaufgaben“).<br><br>Bitte beachten Sie, dass Ihr Name und Ihre Teilnahme am Experiment bis zu 5 Jahre nach Ende des Experiments gespeichtert werden, falls Sie<br>sich Versuchspersonenstunden anrechnen lassen. Beachten Sie dazu die allgemeinen Datenschutzhinweise zur Verarbeitung der<br>Versuchspersonenstunden.'],
	    [['Zurück'],'jumpToQuestion','<b>Aufklärungsdokument</b><br><br>Liebe Studienteilnehmerin, lieber Studienteilnehmer,<br><br>das Experiment „Unterschiedliche Arten von mentalen Rotationsaufgaben“ wurde mit dem Ziel entworfen, Erkenntnis über Zusammenhänge<br>zwischen unterschiedlichen Aufgabentypen und mentaler Rotationsleistung zu gewinnen. Dazu sollen Sie in dem Experiment nach einer kurzen<br>Übungseinheit verschiedene mentale Rotationsaufgaben lösen. Bei diesen mentalen Rotationsaufgaben handelt es sich um kognitive Aufgaben,<br>bei denen Sie abstrakte Figuren im Kopf rotieren und vergleichen sollen. Zusätzlich werden wir demographische Daten zu Ihrem Alter, Ihrem<br>Geschlecht, Ihrem Studienabschluss und Ihrer Vorerfahrung mit solchen Aufgaben erheben. Das gesamte Experiment dauert ca. 30 Minuten.<br><br>Es würde uns sehr freuen, wenn Sie an der Studie teilnehmen würden. Selbstverständlich kann das Experiment jederzeit abgebrochen und die bis<br>dahin erhobenen Daten gelöscht werden. Dadurch entstünden Ihnen keinerlei Nachteile.<br>'],
	    [['Zurück'],'jumpToQuestion', '<b>Datenschutzerklärung</b><br><br><br>Die im Experiment erhobenen Daten werden ausschließlich für wissenschaftliche Zwecke verwendet. Alle Daten werden zunächst codiert<br>gespeichert (pseudonymisiert). Diese Codes können zur Teilnahme am Gewinnspiel oder für Versuchspersonenstunden genutzt werden. Es<br>werden keine weiteren identifizierenden Merkmale zu Ihrer Teilnahme gespeichert, sodass kein direkter Rückschluss auf Ihre Person möglich ist.<br>Die Ergebnisse dieser Studie werden ausschließlich anonymisiert veröffentlicht. Dadurch ist keine Rückentschlüsselung Ihrer Daten mehr möglich.<br>Vor der Veröffentlichung werden alle Codes aus den Daten gelöscht.<br><br>Mit Ihrem Teilnahmecode können Sie an einem Gewinnspiel teilnehmen oder eine halbe (0,5) Versuchspersonenstunde des Instituts für<br>Sportwissenschaft der Universität Regensburg für Ihr Studium erhalten. Dazu werden Ihre E-Mail-Adresse und Ihr Code getrennt von den anderen<br>Daten verarbeitet. Ihre personenbezogenen Daten werden zu keinem anderen Zweck eingesetzt.<br><br>Ihre Rechte bzgl. der Datenverarbeitung (Recht auf Auskunft, Berichtigung und/oder Löschung) können Sie per E-Mail an die verantwortliche Stelle<br>wahrnehmen.<br><br><br>Für die Datenverarbeitung verantwortliche Stelle:<br><br>Institut für Sportwissenschaft<br>Universität Regensburg<br>Tel. 0941 943-2518, E-Mail: sekretariat.jansen@ur.de'],
	    [['Zurück','Ich bin mit der Teilnahme am Experiment einverstanden'],'jumpToQuestion', '<b>Einverständniserklärung</b><br><br>Hiermit willige ich ein, an dem Experiment „Unterschiedliche Arten von mentalen Rotationsaufgaben“ teilzunehmen.<br>Ich wurde für mich ausreichend über Ziele und Ablauf des Experiments informiert.<br><br>Ich erkläre mich damit einverstanden, dass im Rahmen dieser Studie personenbezogene Daten/Angaben die mich betreffen verschlüsselt<br>erhoben (pseudonymisiert), auf elektronischen Datenträgern aufgezeichnet und weiterverarbeitet werden. Ich bin auch damit einverstanden,<br>dass die Studienergebnisse in nicht rückentschlüsselbarer (anonymer) Form, die keinen Rückschluss auf mich zulassen, veröffentlicht werden.<br><br>Folgende Daten werden erhoben:<br>Die Leistung bei mentalen Rotationsaufgaben<br>Allgemeine demographische Daten: Alter, Geschlecht, Studiengang, Vorerfahrung mit mentaler Rotation<br>Nur für die Teilnahme am Gewinnspiel bzw. zum Erhalt von Versuchspersonenstunden (optional): E-Mail-Adresse<br><br>Mir ist bekannt, dass ich meine Einwilligung jederzeit ohne Angaben von Gründen und ohne nachteilige Folgen für mich zurückziehen kann.<br>Das Experiment kann jederzeit abgebrochen werden. Dazu reicht es, das Browserfenster zu schließen.<br><br>Insbesondere ist mir auch bekannt, dass ich bei berechtigten Gründen (z. B. Zuwiderhandlung gegen die Teilnahmebedingungen, Antworten zeigen<br>keinen ernsthaften Teilnahmeversuch) vom Gewinnspiel und dem Erhalt von Versuchspersonenstunden ausgeschlossen werden kann.']
	]
	//questions
	vars.questionnaireArray=[
	    [['Weiter'],'Intro','<b>Demographische Fragen</b><br><br>Nun folgen noch einige demographische Fragen.<br><br>Bitte wählen Sie Ihre Antwort über den entsprechenden Button aus.'],
	    [['18-21','22-25','26-30','31-35','36 oder älter'],'Age','<b>Alter</b><br><br>Wie alt sind Sie? (Jahre)'],
	    [['männlich','weiblich','divers'],'Gender','<b>Geschlecht</b><br><br>Welches Geschlecht haben Sie?'],
	    [['Ich studiere ein MINT-Fach/<br>Ich habe ein MINT-Fach studiert','Ich studiere ein anderes Fach/<br>Ich habe ein anderes Fach studiert','Ich studiere nicht/<br>Ich habe nicht studiert'],'STEM','<b>Studium</b><br><br>Studieren Sie als Hauptfach ein Fach aus dem MINT Bereich (Mathematik, Informatik, Naturwissenschaft, Technik, inklusive Ingenieurswissenschaften)<br>oder haben Sie ein solches Fach als Hauptfach studiert?<br><br>Falls nicht, studieren Sie ein anderes Fach oder haben Sie ein anderes Fach studiert?'],
	    [['Ja','Nein'],'Experience','<b>Erfahrung</b><br><br>Haben Sie bereits an einem anderen Experiment/Test teilgenommen, bei dem Sie ähnliche abstrakte Figuren im Kopf rotieren und vergleichen sollten?'],
	    [['Weiter'],'Code','<b>Teilnahmecode</b><br><br>Auf der nächsten Seite finden Sie Ihren Teilnahmecode. Den Code können Sie nutzen, um am Gewinnspiel teilzunehmen<br>oder<br>um sich eine halbe (0,5) Versuchspersonenstunde vom Institut für Sportwissenschaft der Universität Regensburg für Ihr Studium anrechnen zu lassen.<br><br><b>Achtung!</b> Bitte notieren oder speichern Sie den Code. Er kann Ihnen nicht nachträglich zugeordnet werden.<br><br>Die Teilnahmebedingungen zum Gewinnspiel und Informationen zur Verarbeitung der Versuchspersonenstunden finden Sie auf folgender Website:<br>https://www.uni-regensburg.de/psychologie-paedagogik-sport/sportwissenschaft/forschung/experimente/index.html'],
	    [['Weiter'],'Code','<b>Teilnahmecode</b><br><br>Ihr Teilnahmecode ist:<br><br><b>'+vars.aaID+'<br><br>Achtung!</b> Bitte notieren oder speichern Sie den Code. Er kann Ihnen nicht nachträglich zugeordnet werden.<br><br>Falls Sie am Gewinnspiel teilnehmen möchten, senden Sie den Code in einer E-Mail an sekretariat.jansen@ur.de mit dem Betreff<br>„Gewinnspiel mentale Rotation“.<br><br>Falls Sie eine halbe Versuchspersonenstunde erhalten möchten, senden Sie den Code in einer E-Mail an sekretariat.jansen@ur.de.<br>In der E-Mail müssen außerdem folgende Informationen enthalten sein: <br>Eine Kopie Ihres Laufzettels für Versuchspersonenstunden und<br>der Name des Experiments („Unterschiedliche Arten von mentalen Rotationsaufgaben“).<br>'],
	    [['Weiter'],'End','Vielen Dank für Ihre Teilnahme!<br><br>(Sie können den Vollbildmodus wieder deaktivieren, wenn Sie nochmal F11 bzw. Strg+⌘+F drücken)']
	]
	////error message when not half of stimuli are selected
	vars.errorMessage='Sie müssen die Hälfte<br>der Figuren auswählen'
	vars.continueMessage='Weiter'
	////help message for practice trials
	vars.helpMessage='Links sehen Sie, welche Aufgabe Sie gerade bearbeiten. Rechts sehen Sie die verbleibende Zeit (seit Start der aktuellen Aufgabe).<br><br>Wählen Sie die Hälfte der Vergleichsobjekte aus, <br>die sich durch eine Drehung in das Objekt auf der linken Seite überführen lassen.<br>Die andere Hälfte der Vergleichsobjekte ist gespiegelt.'
	////stimulus generation
	//make sure all desired stimuli are in the pool
	//array of model numbers
	vars.models=[2,3,4,5,6,7,8,12,13,14,15,16]
	//angles of rotation
	vars.angles=[0,45,90,135,180,225,270,315]
	//separate upright and rotated angles
	vars.rotatedAngles=[45,135,225,315]
	vars.uprightAngles=[0,90,180,270]
	//orientations
	vars.orientations=['a','b']
	//axis (only one used)
	vars.axis='z'
	////placement of images
	//for 1920x1080 monitor
	// 960 is distance to center for sides
	// for image size 360, subtract half (180) from edges
	// left align: 780
	// additional distance to fill screen from left to right
	// 1920-5*360=120
	//x offset of first image
	var xFirst=-780
	//additional distance from first image
	vars.xDiffAdd=120
	//distance between images in pixels
	vars.distance=360
	//calculate all x positions
	vars.x0=xFirst
	vars.x1=xFirst+vars.xDiffAdd+vars.distance
	vars.x2=xFirst+vars.xDiffAdd+2*vars.distance
	vars.x3=xFirst+vars.xDiffAdd+3*vars.distance
	vars.x4=xFirst+vars.xDiffAdd+4*vars.distance
	//placement of borders
	vars.lengthBorders=vars.distance-10
	vars.x1B=vars.x1-vars.lengthBorders/2
	vars.x2B=vars.x2-vars.lengthBorders/2
	vars.x3B=vars.x3-vars.lengthBorders/2
	vars.x4B=vars.x4-vars.lengthBorders/2
	vars.yB=-vars.lengthBorders/2
	//placement of button
	vars.buttonWidth=300
	vars.buttonHeight=80
	vars.xbuttonBG=vars.x4-vars.buttonWidth/2
	vars.yButton=vars.distance+vars.buttonHeight
	vars.yButtonBG=vars.yButton-vars.buttonHeight/2
	
	////questionnaire placement of text and buttons
	//parameters
	vars.xQuestion=-800
	vars.yQuestion=-480
	vars.buttonHeightQuestionnaire=160
	vars.buttonDistanceQuestionnaire=50
	//y for buttons
	vars.yButtonQuestionnaire=400
	vars.yButtonBGQuestionnaire=vars.yButtonQuestionnaire-vars.buttonHeightQuestionnaire/2
	__end__

define inline_javascript increaseCounter
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.stimulusNumber+=1
	vars.itemNumber+=1
	__end__

define inline_javascript initializeRandomizationParameters
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	function shuffle(a) {
	    for (let i = a.length - 1; i > 0; i--) {
	        const j = Math.floor(Math.random() * (i + 1));
	        [a[i], a[j]] = [a[j], a[i]];
	    }
	    return a;
	}
	//copy arrays for randomizing
	vars.modelsCopy=vars.models.slice()
	vars.rotatedAnglesCopy=vars.rotatedAngles.slice()
	vars.uprightAnglesCopy=vars.uprightAngles.slice()
	//randomize all
	shuffle(vars.modelsCopy)
	shuffle(vars.rotatedAnglesCopy)
	shuffle(vars.uprightAnglesCopy)	
	
	//main blocks
	//randomize order of blocks
	vars.blocks=[2,-2,4,-4,8,-8]
	shuffle(vars.blocks)
	__end__
	set _prepare ""

define mouse_response instructionsMouseResponse
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Sammelt Mausreaktionen"
	set allowed_responses 1

define mouse_response instructionsMouseResponseFixedDuration
	set timeout "[instructionDuration]"
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Sammelt Mausreaktionen"
	set allowed_responses 3

define mouse_response mouseResponse
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Sammelt Mausreaktionen"
	set allowed_responses 1

define mouse_response mouseResponseQuestion
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Sammelt Mausreaktionen"
	set allowed_responses "1;"

define mouse_response mouseResponse_1_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Sammelt Mausreaktionen"
	set allowed_responses "1;"

define sequence new_sequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run readInstructions always
	run ShowInstructions always
	run randomizeOrder always
	run blockParams always
	run instructionsMouseResponseFixedDuration always
	run ShowInstructions always
	run instructionsMouseResponse always
	run tasks always
	run BlankAtBlockEnd always

define inline_javascript prepareConsent
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//get next question
	var thisQuestion=vars.consentArray[vars.questionNumber]
	vars.questionNumber++
	//number of answers
	vars.nAnswers=thisQuestion[0].length
	//duplicate answers for easier loading (exceeding answers are not shown)
	var answers=new Array(5).fill(thisQuestion[0]).flat()
	vars.answer1=answers[0]
	vars.answer2=answers[1]
	vars.answer3=answers[2]
	vars.answer4=answers[3]
	vars.answer5=answers[4]
	vars.questionID=thisQuestion[1]
	vars.questionText=thisQuestion[2]
	//initialize selected answer
	vars.answerNumber=0
	vars.answer=''
	
	//distribute available space evenly to answers
	vars.buttonWidthQuestionnaire=(vars.xQuestion*(-2)+vars.buttonDistanceQuestionnaire)/vars.nAnswers-vars.buttonDistanceQuestionnaire
	
	//x for buttons
	vars.xButton1Questionnaire=vars.xQuestion+vars.buttonWidthQuestionnaire/2
	vars.xButton2Questionnaire=vars.xButton1Questionnaire+(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)
	vars.xButton3Questionnaire=vars.xButton1Questionnaire+(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)*2
	vars.xButton4Questionnaire=vars.xButton1Questionnaire+(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)*3
	vars.xButton5Questionnaire=vars.xButton1Questionnaire+(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)*4
	
	vars.xButton1BGQuestionnaire=vars.xButton1Questionnaire-vars.buttonWidthQuestionnaire/2
	vars.xButton2BGQuestionnaire=vars.xButton2Questionnaire-vars.buttonWidthQuestionnaire/2
	vars.xButton3BGQuestionnaire=vars.xButton3Questionnaire-vars.buttonWidthQuestionnaire/2
	vars.xButton4BGQuestionnaire=vars.xButton4Questionnaire-vars.buttonWidthQuestionnaire/2
	vars.xButton5BGQuestionnaire=vars.xButton5Questionnaire-vars.buttonWidthQuestionnaire/2
	__end__
	set _prepare ""

define inline_javascript prepareQuestion
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//get next question
	var thisQuestion=vars.questionnaireArray[vars.questionNumber]
	vars.questionNumber++
	//number of answers
	vars.nAnswers=thisQuestion[0].length
	//duplicate answers for easier loading (exceeding answers are not shown)
	var answers=new Array(5).fill(thisQuestion[0]).flat()
	vars.answer1=answers[0]
	vars.answer2=answers[1]
	vars.answer3=answers[2]
	vars.answer4=answers[3]
	vars.answer5=answers[4]
	vars.questionID=thisQuestion[1]
	vars.questionText=thisQuestion[2]
	//initialize selected answer
	vars.answerNumber=0
	vars.answer=''
	
	//distribute available space evenly to answers
	vars.buttonWidthQuestionnaire=(vars.xQuestion*(-2)+vars.buttonDistanceQuestionnaire)/vars.nAnswers-vars.buttonDistanceQuestionnaire
	
	//x for buttons
	vars.xButton1Questionnaire=vars.xQuestion+vars.buttonWidthQuestionnaire/2
	vars.xButton2Questionnaire=vars.xButton1Questionnaire+(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)
	vars.xButton3Questionnaire=vars.xButton1Questionnaire+(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)*2
	vars.xButton4Questionnaire=vars.xButton1Questionnaire+(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)*3
	vars.xButton5Questionnaire=vars.xButton1Questionnaire+(vars.buttonWidthQuestionnaire+vars.buttonDistanceQuestionnaire)*4
	
	vars.xButton1BGQuestionnaire=vars.xButton1Questionnaire-vars.buttonWidthQuestionnaire/2
	vars.xButton2BGQuestionnaire=vars.xButton2Questionnaire-vars.buttonWidthQuestionnaire/2
	vars.xButton3BGQuestionnaire=vars.xButton3Questionnaire-vars.buttonWidthQuestionnaire/2
	vars.xButton4BGQuestionnaire=vars.xButton4Questionnaire-vars.buttonWidthQuestionnaire/2
	vars.xButton5BGQuestionnaire=vars.xButton5Questionnaire-vars.buttonWidthQuestionnaire/2
	__end__
	set _prepare ""

define notepad prepareSketchpads
	__note__
	prepare fixation and stimulus before the time is calculated
	this is done so complicated because sleeping is complicated in javascript
	the timing of the fixation/break is not millisecond precise because the duration of the mouse response (and some other small errors) is unnacounted for
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad question
	set duration 0
	set description "Präsentiert Stimuli"
	draw rect color="#ffffff" fill=1 h="[buttonHeightQuestionnaire]" penwidth=1 show_if="[nAnswers]>0" w="[buttonWidthQuestionnaire]" x="[xButton1BGQuestionnaire]" y="[yButtonBGQuestionnaire]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[nAnswers]>0" text="[answer1]" x="[xButton1Questionnaire]" y="[yButtonQuestionnaire]" z_index=1
	draw rect color="#ffffff" fill=1 h="[buttonHeightQuestionnaire]" penwidth=1 show_if="[nAnswers]>1" w="[buttonWidthQuestionnaire]" x="[xButton2BGQuestionnaire]" y="[yButtonBGQuestionnaire]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[nAnswers]>1" text="[answer2]" x="[xButton2Questionnaire]" y="[yButtonQuestionnaire]" z_index=1
	draw rect color="#ffffff" fill=1 h="[buttonHeightQuestionnaire]" penwidth=1 show_if="[nAnswers]>2" w="[buttonWidthQuestionnaire]" x="[xButton3BGQuestionnaire]" y="[yButtonBGQuestionnaire]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[nAnswers]>2" text="[answer3]" x="[xButton3Questionnaire]" y="[yButtonQuestionnaire]" z_index=1
	draw rect color="#ffffff" fill=1 h="[buttonHeightQuestionnaire]" penwidth=1 show_if="[nAnswers]>3" w="[buttonWidthQuestionnaire]" x="[xButton4BGQuestionnaire]" y="[yButtonBGQuestionnaire]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[nAnswers]>3" text="[answer4]" x="[xButton4Questionnaire]" y="[yButtonQuestionnaire]" z_index=1
	draw rect color="#ffffff" fill=1 h="[buttonHeightQuestionnaire]" penwidth=1 show_if="[nAnswers]>4" w="[buttonWidthQuestionnaire]" x="[xButton5BGQuestionnaire]" y="[yButtonBGQuestionnaire]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[nAnswers]>4" text="[answer5]" x="[xButton5Questionnaire]" y="[yButtonQuestionnaire]" z_index=1
	draw textline center=0 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="[questionText]" x="[xQuestion]" y="[yQuestion]" z_index=1

define sketchpad question_1
	set duration 0
	set description "Präsentiert Stimuli"
	draw rect color="#ffffff" fill=1 h="[buttonHeightQuestionnaire]" penwidth=1 show_if="[nAnswers]>0" w="[buttonWidthQuestionnaire]" x="[xButton1BGQuestionnaire]" y="[yButtonBGQuestionnaire]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[nAnswers]>0" text="[answer1]" x="[xButton1Questionnaire]" y="[yButtonQuestionnaire]" z_index=1
	draw rect color="#ffffff" fill=1 h="[buttonHeightQuestionnaire]" penwidth=1 show_if="[nAnswers]>1" w="[buttonWidthQuestionnaire]" x="[xButton2BGQuestionnaire]" y="[yButtonBGQuestionnaire]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[nAnswers]>1" text="[answer2]" x="[xButton2Questionnaire]" y="[yButtonQuestionnaire]" z_index=1
	draw rect color="#ffffff" fill=1 h="[buttonHeightQuestionnaire]" penwidth=1 show_if="[nAnswers]>2" w="[buttonWidthQuestionnaire]" x="[xButton3BGQuestionnaire]" y="[yButtonBGQuestionnaire]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[nAnswers]>2" text="[answer3]" x="[xButton3Questionnaire]" y="[yButtonQuestionnaire]" z_index=1
	draw rect color="#ffffff" fill=1 h="[buttonHeightQuestionnaire]" penwidth=1 show_if="[nAnswers]>3" w="[buttonWidthQuestionnaire]" x="[xButton4BGQuestionnaire]" y="[yButtonBGQuestionnaire]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[nAnswers]>3" text="[answer4]" x="[xButton4Questionnaire]" y="[yButtonQuestionnaire]" z_index=1
	draw textline center=0 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="[questionText]" x="[xQuestion]" y="[yQuestion]" z_index=1

define logger questionnaireLogger
	set description "Registriert experimentelle Daten"
	set auto_log no
	log aaBlock
	log questionID
	log answer
	log aaID

define inline_javascript randomizeOrder
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	function shuffle(a) {
	    for (let i = a.length - 1; i > 0; i--) {
	        const j = Math.floor(Math.random() * (i + 1));
	        [a[i], a[j]] = [a[j], a[i]];
	    }
	    return a;
	}
	//practice blocks
	//stimuli defined by modelNumber, angle, nStimuli
	//one item with 2 upright, 4 rotated, 8 upright (number of alternatives, orientation of stimuli)
	if (vars.aaBlock=='practice'){
	    vars.stimulusList=[
	        [vars.modelsCopy[0],vars.uprightAnglesCopy[0],2],
	        [vars.modelsCopy[1],vars.rotatedAnglesCopy[0],4],
	        [vars.modelsCopy[2],vars.uprightAnglesCopy[1],8]
	    ]
	    //random order
	    shuffle(vars.stimulusList)
	} else {
	    //initalize variables
	    var numberOfTasks
	    var angle
	    var model=0
	    var upright=0
	    var rotated=0
	    var nStim=vars.blocks[vars.block]
	    vars.stimulusList=[]
	    
	    //number of tasks in this block (48 alternatives in total)
	    numberOfTasks=48/Math.abs(nStim)
	    for(var task=0; task<numberOfTasks;task++){
	        if(nStim<0){
	            angle=vars.uprightAnglesCopy[upright%vars.uprightAnglesCopy.length]
	            upright+=1
	            if(upright%vars.uprightAnglesCopy.length==0){
	                shuffle(vars.uprightAnglesCopy)
	            }
	        } else {
	            angle=vars.rotatedAnglesCopy[rotated%vars.rotatedAnglesCopy.length]
	            rotated+=1
	            if(rotated%vars.rotatedAnglesCopy.length==0){
	                shuffle(vars.rotatedAnglesCopy)
	            }
	        }
	        vars.stimulusList.push([vars.modelsCopy[model%vars.modelsCopy.length],angle,Math.abs(nStim)])
	        model+=1
	        if(model%vars.modelsCopy.length==0){
	            shuffle(vars.modelsCopy)
	        }
	    }
	}
	__end__
	set _prepare ""

define inline_javascript readConsent
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.numberOfQuestions=vars.consentArray.length
	vars.questionNumber=0
	vars.aaBlock='consent'
	__end__
	set _prepare ""

define inline_javascript readInstructions
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	vars.instructionText=vars.instructions=='practice'? vars.instructionsPractice:vars.instructionsMain[vars.block]
	vars.instructionText=vars.instructionText.replace('_blocknumber_',vars.block+1)
	var nStim=Math.abs(vars.blocks[vars.block])
	vars.instructionText=vars.instructionText.replace('_nStim_',nStim)
	vars.instructionText=vars.instructionText.replace('_nTasks_',48/nStim)
	__end__

define inline_javascript readQuestions
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.numberOfQuestions=vars.questionnaireArray.length
	vars.questionNumber=0
	vars.aaBlock='questionnaire'
	__end__
	set _prepare ""

define inline_javascript resetClicked
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//show borders if clicked
	//all as variables because stimulus presentation cannot handle array varsiables?
	vars.show0=0
	vars.show1=0
	vars.show2=0
	vars.show3=0
	vars.show4=0
	vars.show5=0
	vars.show6=0
	vars.show7=0
	//show red border for wrong feedback
	vars.show0r=0
	vars.show1r=0
	vars.show2r=0
	vars.show3r=0
	vars.show4r=0
	vars.show5r=0
	vars.show6r=0
	vars.show7r=0
	//show green border for correct feedback
	vars.show0g=0
	vars.show1g=0
	vars.show2g=0
	vars.show3g=0
	vars.show4g=0
	vars.show5g=0
	vars.show6g=0
	vars.show7g=0
	//set nextButton to not clicked
	vars.nextButton=0
	vars.nextButtonText=vars.errorMessage
	__end__

define inline_javascript setFilenames
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	function getStimulusname(model, angle, orientation, axis){
	    if (angle==0){
		    return model+'_'+orientation+'.png'
	     }
	    else{
		    return model+'_'+orientation+'_'+axis+'_'+angle+'.png'
	     }
	}
	
	vars.target0File=getStimulusname(vars.model,vars.anglesArray[0],vars.orientationsArray[0],vars.axis)
	vars.target1File=getStimulusname(vars.model,vars.anglesArray[1],vars.orientationsArray[1],vars.axis)
	vars.target2File=getStimulusname(vars.model,vars.anglesArray[2],vars.orientationsArray[2],vars.axis)
	vars.target3File=getStimulusname(vars.model,vars.anglesArray[3],vars.orientationsArray[3],vars.axis)
	vars.target4File=getStimulusname(vars.model,vars.anglesArray[4],vars.orientationsArray[4],vars.axis)
	vars.target5File=getStimulusname(vars.model,vars.anglesArray[5],vars.orientationsArray[5],vars.axis)
	vars.target6File=getStimulusname(vars.model,vars.anglesArray[6],vars.orientationsArray[6],vars.axis)
	vars.target7File=getStimulusname(vars.model,vars.anglesArray[7],vars.orientationsArray[7],vars.axis)
	vars.comparisonFile=getStimulusname(vars.model,vars.angle,vars.orientation,vars.axis)
	//set correct responses
	vars.correct0=vars.orientationsArray[0]==vars.orientation? 1:0
	vars.correct1=vars.orientationsArray[1]==vars.orientation? 1:0
	vars.correct2=vars.orientationsArray[2]==vars.orientation? 1:0
	vars.correct3=vars.orientationsArray[3]==vars.orientation? 1:0
	vars.correct4=vars.orientationsArray[4]==vars.orientation? 1:0
	vars.correct5=vars.orientationsArray[5]==vars.orientation? 1:0
	vars.correct6=vars.orientationsArray[6]==vars.orientation? 1:0
	vars.correct7=vars.orientationsArray[7]==vars.orientation? 1:0
	__end__

define inline_javascript setFixationDuration
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	//get nicer looking string to display time as mm:ss
	function getNiceTime(timeSeconds){
	    var timeMins=Math.floor(timeSeconds/60)
	    var timeSeconds=Math.floor(timeSeconds-60*timeMins)
	    var mins=timeMins<10 ? '0' : ''
	    var secs=timeSeconds<10 ? '0' : ''
	    return mins+timeMins+':'+secs+timeSeconds
	}
	
	var timeNow=new Date();
	//set startTime after all initialization of loop (itemNumber already increased by 1)
	if (vars.itemNumber==1){
		vars.startTimeOfBlock=timeNow.getTime()
	} else {
	    vars.timeLeft=getNiceTime((vars.maxDuration-vars.endTimeOfTask+vars.startTimeOfBlock)/1000)
	    //actual fixation duration minus time passed for preparation since end of last task
	    vars.fixationDurationLeft=Math.max(vars.fixationDuration-(timeNow.getTime()-vars.endTimeOfTask),1)
	}
	__end__

define inline_javascript setTaskStartTime
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	//start time of run phase (after preparation)
	vars.startTimeOfTask=new Date().getTime()
	__end__
	set _prepare ""

define mouse_response showMouse
	set timeout "[fixationDurationLeft]"
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Sammelt Mausreaktionen"
	set allowed_responses 3

define loop showQuestion
	set source_file ""
	set source table
	set repeat 100
	set order sequential
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 100
	set continuous no
	set break_if_on_first no
	set break_if "[answerNumber]>0"
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	setcycle 6 empty_column ""
	setcycle 7 empty_column ""
	setcycle 8 empty_column ""
	setcycle 9 empty_column ""
	setcycle 10 empty_column ""
	setcycle 11 empty_column ""
	setcycle 12 empty_column ""
	setcycle 13 empty_column ""
	setcycle 14 empty_column ""
	setcycle 15 empty_column ""
	setcycle 16 empty_column ""
	setcycle 17 empty_column ""
	setcycle 18 empty_column ""
	setcycle 19 empty_column ""
	setcycle 20 empty_column ""
	setcycle 21 empty_column ""
	setcycle 22 empty_column ""
	setcycle 23 empty_column ""
	setcycle 24 empty_column ""
	setcycle 25 empty_column ""
	setcycle 26 empty_column ""
	setcycle 27 empty_column ""
	setcycle 28 empty_column ""
	setcycle 29 empty_column ""
	setcycle 30 empty_column ""
	setcycle 31 empty_column ""
	setcycle 32 empty_column ""
	setcycle 33 empty_column ""
	setcycle 34 empty_column ""
	setcycle 35 empty_column ""
	setcycle 36 empty_column ""
	setcycle 37 empty_column ""
	setcycle 38 empty_column ""
	setcycle 39 empty_column ""
	setcycle 40 empty_column ""
	setcycle 41 empty_column ""
	setcycle 42 empty_column ""
	setcycle 43 empty_column ""
	setcycle 44 empty_column ""
	setcycle 45 empty_column ""
	setcycle 46 empty_column ""
	setcycle 47 empty_column ""
	setcycle 48 empty_column ""
	setcycle 49 empty_column ""
	setcycle 50 empty_column ""
	setcycle 51 empty_column ""
	setcycle 52 empty_column ""
	setcycle 53 empty_column ""
	setcycle 54 empty_column ""
	setcycle 55 empty_column ""
	setcycle 56 empty_column ""
	setcycle 57 empty_column ""
	setcycle 58 empty_column ""
	setcycle 59 empty_column ""
	setcycle 60 empty_column ""
	setcycle 61 empty_column ""
	setcycle 62 empty_column ""
	setcycle 63 empty_column ""
	setcycle 64 empty_column ""
	setcycle 65 empty_column ""
	setcycle 66 empty_column ""
	setcycle 67 empty_column ""
	setcycle 68 empty_column ""
	setcycle 69 empty_column ""
	setcycle 70 empty_column ""
	setcycle 71 empty_column ""
	setcycle 72 empty_column ""
	setcycle 73 empty_column ""
	setcycle 74 empty_column ""
	setcycle 75 empty_column ""
	setcycle 76 empty_column ""
	setcycle 77 empty_column ""
	setcycle 78 empty_column ""
	setcycle 79 empty_column ""
	setcycle 80 empty_column ""
	setcycle 81 empty_column ""
	setcycle 82 empty_column ""
	setcycle 83 empty_column ""
	setcycle 84 empty_column ""
	setcycle 85 empty_column ""
	setcycle 86 empty_column ""
	setcycle 87 empty_column ""
	setcycle 88 empty_column ""
	setcycle 89 empty_column ""
	setcycle 90 empty_column ""
	setcycle 91 empty_column ""
	setcycle 92 empty_column ""
	setcycle 93 empty_column ""
	setcycle 94 empty_column ""
	setcycle 95 empty_column ""
	setcycle 96 empty_column ""
	setcycle 97 empty_column ""
	setcycle 98 empty_column ""
	setcycle 99 empty_column ""
	run showQuestionSequence

define sequence showQuestionSequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run question always
	run mouseResponseQuestion always
	run GetClickedQuestion always

define sequence showQuestionSequence_1
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run question always
	run mouseResponseQuestion always
	run GetClickedQuestion always

define loop showQuestion_1
	set source_file ""
	set source table
	set repeat 100
	set order sequential
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 100
	set continuous no
	set break_if_on_first no
	set break_if "[answerNumber]>0"
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	setcycle 6 empty_column ""
	setcycle 7 empty_column ""
	setcycle 8 empty_column ""
	setcycle 9 empty_column ""
	setcycle 10 empty_column ""
	setcycle 11 empty_column ""
	setcycle 12 empty_column ""
	setcycle 13 empty_column ""
	setcycle 14 empty_column ""
	setcycle 15 empty_column ""
	setcycle 16 empty_column ""
	setcycle 17 empty_column ""
	setcycle 18 empty_column ""
	setcycle 19 empty_column ""
	setcycle 20 empty_column ""
	setcycle 21 empty_column ""
	setcycle 22 empty_column ""
	setcycle 23 empty_column ""
	setcycle 24 empty_column ""
	setcycle 25 empty_column ""
	setcycle 26 empty_column ""
	setcycle 27 empty_column ""
	setcycle 28 empty_column ""
	setcycle 29 empty_column ""
	setcycle 30 empty_column ""
	setcycle 31 empty_column ""
	setcycle 32 empty_column ""
	setcycle 33 empty_column ""
	setcycle 34 empty_column ""
	setcycle 35 empty_column ""
	setcycle 36 empty_column ""
	setcycle 37 empty_column ""
	setcycle 38 empty_column ""
	setcycle 39 empty_column ""
	setcycle 40 empty_column ""
	setcycle 41 empty_column ""
	setcycle 42 empty_column ""
	setcycle 43 empty_column ""
	setcycle 44 empty_column ""
	setcycle 45 empty_column ""
	setcycle 46 empty_column ""
	setcycle 47 empty_column ""
	setcycle 48 empty_column ""
	setcycle 49 empty_column ""
	setcycle 50 empty_column ""
	setcycle 51 empty_column ""
	setcycle 52 empty_column ""
	setcycle 53 empty_column ""
	setcycle 54 empty_column ""
	setcycle 55 empty_column ""
	setcycle 56 empty_column ""
	setcycle 57 empty_column ""
	setcycle 58 empty_column ""
	setcycle 59 empty_column ""
	setcycle 60 empty_column ""
	setcycle 61 empty_column ""
	setcycle 62 empty_column ""
	setcycle 63 empty_column ""
	setcycle 64 empty_column ""
	setcycle 65 empty_column ""
	setcycle 66 empty_column ""
	setcycle 67 empty_column ""
	setcycle 68 empty_column ""
	setcycle 69 empty_column ""
	setcycle 70 empty_column ""
	setcycle 71 empty_column ""
	setcycle 72 empty_column ""
	setcycle 73 empty_column ""
	setcycle 74 empty_column ""
	setcycle 75 empty_column ""
	setcycle 76 empty_column ""
	setcycle 77 empty_column ""
	setcycle 78 empty_column ""
	setcycle 79 empty_column ""
	setcycle 80 empty_column ""
	setcycle 81 empty_column ""
	setcycle 82 empty_column ""
	setcycle 83 empty_column ""
	setcycle 84 empty_column ""
	setcycle 85 empty_column ""
	setcycle 86 empty_column ""
	setcycle 87 empty_column ""
	setcycle 88 empty_column ""
	setcycle 89 empty_column ""
	setcycle 90 empty_column ""
	setcycle 91 empty_column ""
	setcycle 92 empty_column ""
	setcycle 93 empty_column ""
	setcycle 94 empty_column ""
	setcycle 95 empty_column ""
	setcycle 96 empty_column ""
	setcycle 97 empty_column ""
	setcycle 98 empty_column ""
	setcycle 99 empty_column ""
	run showQuestionSequence_1

define loop singleTask
	set source_file ""
	set source table
	set repeat 100
	set order sequential
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 100
	set continuous no
	set break_if_on_first no
	set break_if "[nextButton]=1"
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	setcycle 6 empty_column ""
	setcycle 7 empty_column ""
	setcycle 8 empty_column ""
	setcycle 9 empty_column ""
	setcycle 10 empty_column ""
	setcycle 11 empty_column ""
	setcycle 12 empty_column ""
	setcycle 13 empty_column ""
	setcycle 14 empty_column ""
	setcycle 15 empty_column ""
	setcycle 16 empty_column ""
	setcycle 17 empty_column ""
	setcycle 18 empty_column ""
	setcycle 19 empty_column ""
	setcycle 20 empty_column ""
	setcycle 21 empty_column ""
	setcycle 22 empty_column ""
	setcycle 23 empty_column ""
	setcycle 24 empty_column ""
	setcycle 25 empty_column ""
	setcycle 26 empty_column ""
	setcycle 27 empty_column ""
	setcycle 28 empty_column ""
	setcycle 29 empty_column ""
	setcycle 30 empty_column ""
	setcycle 31 empty_column ""
	setcycle 32 empty_column ""
	setcycle 33 empty_column ""
	setcycle 34 empty_column ""
	setcycle 35 empty_column ""
	setcycle 36 empty_column ""
	setcycle 37 empty_column ""
	setcycle 38 empty_column ""
	setcycle 39 empty_column ""
	setcycle 40 empty_column ""
	setcycle 41 empty_column ""
	setcycle 42 empty_column ""
	setcycle 43 empty_column ""
	setcycle 44 empty_column ""
	setcycle 45 empty_column ""
	setcycle 46 empty_column ""
	setcycle 47 empty_column ""
	setcycle 48 empty_column ""
	setcycle 49 empty_column ""
	setcycle 50 empty_column ""
	setcycle 51 empty_column ""
	setcycle 52 empty_column ""
	setcycle 53 empty_column ""
	setcycle 54 empty_column ""
	setcycle 55 empty_column ""
	setcycle 56 empty_column ""
	setcycle 57 empty_column ""
	setcycle 58 empty_column ""
	setcycle 59 empty_column ""
	setcycle 60 empty_column ""
	setcycle 61 empty_column ""
	setcycle 62 empty_column ""
	setcycle 63 empty_column ""
	setcycle 64 empty_column ""
	setcycle 65 empty_column ""
	setcycle 66 empty_column ""
	setcycle 67 empty_column ""
	setcycle 68 empty_column ""
	setcycle 69 empty_column ""
	setcycle 70 empty_column ""
	setcycle 71 empty_column ""
	setcycle 72 empty_column ""
	setcycle 73 empty_column ""
	setcycle 74 empty_column ""
	setcycle 75 empty_column ""
	setcycle 76 empty_column ""
	setcycle 77 empty_column ""
	setcycle 78 empty_column ""
	setcycle 79 empty_column ""
	setcycle 80 empty_column ""
	setcycle 81 empty_column ""
	setcycle 82 empty_column ""
	setcycle 83 empty_column ""
	setcycle 84 empty_column ""
	setcycle 85 empty_column ""
	setcycle 86 empty_column ""
	setcycle 87 empty_column ""
	setcycle 88 empty_column ""
	setcycle 89 empty_column ""
	setcycle 90 empty_column ""
	setcycle 91 empty_column ""
	setcycle 92 empty_column ""
	setcycle 93 empty_column ""
	setcycle 94 empty_column ""
	setcycle 95 empty_column ""
	setcycle 96 empty_column ""
	setcycle 97 empty_column ""
	setcycle 98 empty_column ""
	setcycle 99 empty_column ""
	run singleTaskSequence

define sequence singleTaskSequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run stimulus always
	run mouseResponse always
	run GetClicked always

define sketchpad stimulus
	set duration 0
	set description "Präsentiert Stimuli"
	draw rect color="#ffffff" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show0]==1" w="[lengthBorders]" x="[x1B]" y="[yBorderTop]" z_index=3
	draw rect color="#ffffff" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show1]==1" w="[lengthBorders]" x="[x2B]" y="[yBorderTop]" z_index=3
	draw rect color="#ffffff" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show2]==1" w="[lengthBorders]" x="[x3B]" y="[yBorderTop]" z_index=3
	draw rect color="#ffffff" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show3]==1" w="[lengthBorders]" x="[x4B]" y="[yBorderTop]" z_index=3
	draw rect color="#ffffff" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show4]==1" w="[lengthBorders]" x="[x1B]" y="[yBorderBottom]" z_index=3
	draw rect color="#ffffff" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show5]==1" w="[lengthBorders]" x="[x2B]" y="[yBorderBottom]" z_index=3
	draw rect color="#ffffff" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show6]==1" w="[lengthBorders]" x="[x3B]" y="[yBorderBottom]" z_index=3
	draw rect color="#ffffff" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show7]==1" w="[lengthBorders]" x="[x4B]" y="[yBorderBottom]" z_index=3
	draw rect color="#800000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show0r]==1" w="[lengthBorders]" x="[x1B]" y="[yBorderTop]" z_index=2
	draw rect color="#800000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show1r]==1" w="[lengthBorders]" x="[x2B]" y="[yBorderTop]" z_index=2
	draw rect color="#800000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show2r]==1" w="[lengthBorders]" x="[x3B]" y="[yBorderTop]" z_index=2
	draw rect color="#800000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show3r]==1" w="[lengthBorders]" x="[x4B]" y="[yBorderTop]" z_index=2
	draw rect color="#800000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show4r]==1" w="[lengthBorders]" x="[x1B]" y="[yBorderBottom]" z_index=2
	draw rect color="#800000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show5r]==1" w="[lengthBorders]" x="[x2B]" y="[yBorderBottom]" z_index=2
	draw rect color="#800000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show6r]==1" w="[lengthBorders]" x="[x3B]" y="[yBorderBottom]" z_index=2
	draw rect color="#800000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show7r]==1" w="[lengthBorders]" x="[x4B]" y="[yBorderBottom]" z_index=2
	draw rect color="#008000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show0g]==1" w="[lengthBorders]" x="[x1B]" y="[yBorderTop]" z_index=1
	draw rect color="#008000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show1g]==1" w="[lengthBorders]" x="[x2B]" y="[yBorderTop]" z_index=1
	draw rect color="#008000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show2g]==1" w="[lengthBorders]" x="[x3B]" y="[yBorderTop]" z_index=1
	draw rect color="#008000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show3g]==1" w="[lengthBorders]" x="[x4B]" y="[yBorderTop]" z_index=1
	draw rect color="#008000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show4g]==1" w="[lengthBorders]" x="[x1B]" y="[yBorderBottom]" z_index=1
	draw rect color="#008000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show5g]==1" w="[lengthBorders]" x="[x2B]" y="[yBorderBottom]" z_index=1
	draw rect color="#008000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show6g]==1" w="[lengthBorders]" x="[x3B]" y="[yBorderBottom]" z_index=1
	draw rect color="#008000" fill=0 h="[lengthBorders]" penwidth=10 show_if="[show7g]==1" w="[lengthBorders]" x="[x4B]" y="[yBorderBottom]" z_index=1
	draw rect color="#ffffff" fill=1 h="[buttonHeight]" name=nextBG penwidth=1 show_if=always w="[buttonWidth]" x="[xbuttonBG]" y="[yButtonBG]" z_index=1
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes name=next show_if=always text="[nextButtonText]" x="[x4]" y="[yButton]" z_index=1
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Aufgabe: [itemNumber]/[maxNumberStimuli]" x="[x0]" y="-[yButton]" z_index=1
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes name=timeField show_if=always text="verbleibende Zeit: [timeLeft]" x="[x4]" y="-[yButton]" z_index=1
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes name=helpField show_if=always text="[helpText]" x=0 y="-[yButton]" z_index=1
	draw image center=1 file="[comparisonFile]" name=base scale=1 show_if=always x="[x0]" y=0 z_index=0
	draw image center=1 file="[target0File]" name=target0 scale=1 show_if="[nStimuli]>0" x="[x1]" y="-[yOffset]" z_index=0
	draw image center=1 file="[target1File]" name=target1 scale=1 show_if="[nStimuli]>1" x="[x2]" y="-[yOffset]" z_index=0
	draw image center=1 file="[target2File]" name=target2 scale=1 show_if="[nStimuli]>2" x="[x3]" y="-[yOffset]" z_index=0
	draw image center=1 file="[target3File]" name=target3 scale=1 show_if="[nStimuli]>3" x="[x4]" y="-[yOffset]" z_index=0
	draw image center=1 file="[target4File]" name=target4 scale=1 show_if="[nStimuli]>4" x="[x1]" y="[yOffset]" z_index=0
	draw image center=1 file="[target5File]" name=target5 scale=1 show_if="[nStimuli]>5" x="[x2]" y="[yOffset]" z_index=0
	draw image center=1 file="[target6File]" name=target6 scale=1 show_if="[nStimuli]>6" x="[x3]" y="[yOffset]" z_index=0
	draw image center=1 file="[target7File]" name=target7 scale=1 show_if="[nStimuli]>7" x="[x4]" y="[yOffset]" z_index=0

define logger stimulusLogger
	set description "Registriert experimentelle Daten"
	set auto_log no
	log aaBlock
	log model
	log angle
	log orientation
	log nStimuli
	log correctStimuli
	log correctAnswers
	log anglesArray
	log sumCorrect
	log reactionTime
	log aaID
	log answers

define loop tasks
	set source_file ""
	set source table
	set repeat 100
	set order sequential
	set description "Führt wiederholt ein anderes Item aus"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[itemNumber]>=[maxNumberStimuli] or [endTimeOfTaskRelative]>[maxDuration]"
	setcycle 0 empty_column ""
	run tasksSequence

define sequence tasksSequence
	set flush_keyboard yes
	set description "Führt mehrere Items nacheinander aus"
	run resetClicked always
	run RandomizeAlternatives always
	run setFilenames always
	run increaseCounter always
	run prepareSketchpads always
	run Fixation always
	run stimulus never
	run setFixationDuration always
	run showMouse always
	run setTaskStartTime always
	run singleTask always
	run getTaskEndTime always
	run getResults always
	run stimulusLogger always

